<CompuCell3D Revision="0" Version="4.4.1">
   
   <Metadata>
      
      <!-- Basic properties simulation -->
      <NumberOfProcessors>1</NumberOfProcessors>
      <DebugOutputFrequency>10</DebugOutputFrequency>
      <!-- <NonParallelModule Name="Potts"/> -->
   </Metadata>
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="256" y="256" z="1"/>
      <Steps>100000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>1</NeighborOrder>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <!-- BOUNDARY 1 -->
      <CellType TypeId="1" TypeName="BOUND"/>
      <!-- Proliferative -->
      <CellType TypeId="2" TypeName="PROL"/>
      <!-- Quiescent -->
      <CellType TypeId="3" TypeName="QUIE"/>
      <!-- Necrotic -->
      <CellType TypeId="4" TypeName="NECR"/>
      <!-- BOUNDARY 2 -->
      <CellType TypeId="5" TypeName="EPI"/>

      <CellType TypeId="6" TypeName="LUM"/>

      
   </Plugin>
   
   <Plugin Name="Volume"/>
   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
   <Plugin Name="NeighborTracker">
      
      <!-- Module tracking neighboring cells of each cell -->
   </Plugin>
   
   <Plugin Name="Contact">
      <!-- Specification of adhesion energies -->
      <Energy Type1="Medium" Type2="Medium">10.0</Energy>
      <Energy Type1="Medium" Type2="PROL">15.0</Energy>
      <Energy Type1="Medium" Type2="QUIE">10.0</Energy>
      <Energy Type1="Medium" Type2="NECR">10.0</Energy>
      <Energy Type1="Medium" Type2="BOUND">10.0</Energy>
      <Energy Type1="Medium" Type2="EPI">10.0</Energy>
      <Energy Type1="PROL" Type2="PROL">10.0</Energy>
      <Energy Type1="PROL" Type2="QUIE">10.0</Energy>
      <Energy Type1="PROL" Type2="NECR">10.0</Energy>
      <Energy Type1="QUIE" Type2="QUIE">10.0</Energy>
      <Energy Type1="QUIE" Type2="NECR">10.0</Energy>
      <Energy Type1="NECR" Type2="NECR">10.0</Energy>
      <Energy Type1="BOUND" Type2="PROL">100.0</Energy>
      <Energy Type1="BOUND" Type2="QUIE">100.0</Energy>
      <Energy Type1="BOUND" Type2="NECR">10.0</Energy>
      <Energy Type1="BOUND" Type2="BOUND">10.0</Energy>
      
      <Energy Type1="EPI" Type2="PROL">7.0</Energy>
      <Energy Type1="EPI" Type2="QUIE">20.0</Energy>
      <Energy Type1="EPI" Type2="NECR">10.0</Energy>
      <Energy Type1="EPI" Type2="BOUND">10.0</Energy>
      <Energy Type1="EPI" Type2="EPI">10.0</Energy>
      <Energy Type1="LUM" Type2="LUM">10.0</Energy>
      <Energy Type1="LUM" Type2="EPI">10.0</Energy>
      <Energy Type1="LUM" Type2="PROL">10.0</Energy>
      <Energy Type1="LUM" Type2="QUIE">10.0</Energy>
      <Energy Type1="LUM" Type2="NECR">10.0</Energy>
      <Energy Type1="LUM" Type2="BOUND">10.0</Energy>
      <NeighborOrder>4</NeighborOrder>
   </Plugin>
   
   <Plugin Name="Secretion">
      
      <!-- Specification of secretion properties of select cell types. -->
      <!-- You may repeat Field element for each chemical field declared in the PDE solvers -->
      <!-- Specification of secretion properties of individual cells can be done in Python -->
      <Field Name="Nutrients">
         <ConstantConcentration Type="Medium">100.0</ConstantConcentration>
      </Field>
   </Plugin>
   
   <Plugin Name="PixelTracker">
   
    <!-- Module tracking pixels of each cell -->
    </Plugin>

   
   <Steppable Type="DiffusionSolverFE">
      
      <!-- Specification of PDE solvers -->
      <DiffusionField Name="Nutrients">
         <DiffusionData>
            <FieldName>Nutrients</FieldName>
            <GlobalDiffusionConstant>1</GlobalDiffusionConstant>
            <GlobalDecayConstant>0</GlobalDecayConstant>
            <!-- Additional options are: -->
            <!-- initial concentration to 100, this means the field will start with 100 units in all points in space -->
            <InitialConcentrationExpression>100</InitialConcentrationExpression>
            <!-- <ConcentrationFileName>INITIAL CONCENTRATION FIELD - typically a file with path Simulation/NAME_OF_THE_FILE.txt</ConcentrationFileName> -->
            <!-- <DiffusionCoefficient CellType="PROL">0.1</DiffusionCoefficient> -->
            <!-- <DiffusionCoefficient CellType="QUIE">0.1</DiffusionCoefficient> -->
            <!-- <DiffusionCoefficient CellType="NECR">0.1</DiffusionCoefficient> -->
            <!-- <DecayCoefficient CellType="PROL">0.0001</DecayCoefficient> -->
            <!-- <DecayCoefficient CellType="QUIE">0.0001</DecayCoefficient> -->
            <!-- <DecayCoefficient CellType="NECR">0.0001</DecayCoefficient> -->
         </DiffusionData>
         <SecretionData>
            <!-- When secretion is defined inside DissufionSolverFE all secretion constants are scaled automaticaly to account for the extra calls to the diffusion step when handling large diffusion constants -->
            
            <!-- Uniform secretion Definition -->
            <!-- <Secretion Type="PROL">0.1</Secretion> -->
            <!-- <Secretion Type="QUIE">0.1</Secretion> -->
            <!-- <Secretion Type="NECR">0.1</Secretion> -->
            <!-- <SecretionOnContact SecreteOnContactWith="PROL,QUIE,NECR" Type="NECR">0.2</SecretionOnContact> -->
            <!-- <ConstantConcentration Type="NECR">0.1</ConstantConcentration> -->
         </SecretionData>
         <BoundaryConditions>
            <Plane Axis="X">
               <!-- <ConstantValue PlanePosition="Min" Value="10.0"/> -->
               <!-- <ConstantValue PlanePosition="Max" Value="5.0"/> -->
               <!-- Other options are (examples): -->
               <Periodic/>
               <!-- <ConstantDerivative PlanePosition="Min" Value="10.0"/> -->
            </Plane>
            <Plane Axis="Y">
               <!-- <ConstantDerivative PlanePosition="Min" Value="10.0"/> -->
               <!-- <ConstantDerivative PlanePosition="Max" Value="5.0"/> -->
               <!-- Other options are (examples): -->
               <Periodic/>
               <!-- <ConstantValue PlanePosition="Min" Value="10.0"/> -->
            </Plane>
         </BoundaryConditions>
      </DiffusionField>
   </Steppable>
   
   <Steppable Type="UniformInitializer">
      
      <!-- Initial layout of cells in the form of rectangular slab -->
      <Region>
         <BoxMin x="124" y="124" z="0"/>
         <BoxMax x="132" y="132" z="1"/>
         <Gap>0</Gap>
         <Width>4</Width>
         <Types>PROL</Types>
      </Region>
   </Steppable>
</CompuCell3D>