<CompuCell3D Revision="0" Version="4.4.1">
   
   <Metadata>
      
      <!-- Basic properties simulation -->
      <NumberOfProcessors>1</NumberOfProcessors>
      <DebugOutputFrequency>10</DebugOutputFrequency>
      <!-- <NonParallelModule Name="Potts"/> -->
   </Metadata>
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="256" y="256" z="1"/>
      <Steps>100000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>1</NeighborOrder>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
   </Plugin>
   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
   <Plugin Name="NeighborTracker">
      
      <!-- Module tracking neighboring cells of each cell -->
   </Plugin>
   
   <Steppable Type="UniformInitializer">
      
      <!-- Initial layout of cells in the form of rectangular slab -->
      <Region>
         <BoxMin x="51" y="51" z="0"/>
         <BoxMax x="204" y="204" z="1"/>
         <Gap>0</Gap>
         <Width>7</Width>
         <Types/>
      </Region>
   </Steppable>
</CompuCell3D>
